# Generated by Configurator on Mon Nov 18 16:49:05 PST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,Ti2-E__0,NikonTi2,Ti2-E__0
Device,ZDrive,NikonTi2,ZDrive
Device,XYStage,NikonTi2,XYStage
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,DiaLamp,NikonTi2,DiaLamp
Device,NIMultiAnalogOutHub,NIMultiAnalog,NIMultiAnalogOutHub
Device,NIMultiAnalogOut-Dev1/ao2,NIMultiAnalog,NIMultiAnalogOut-Dev1/ao2
Device,DA Z Stage,Utilities,DA Z Stage
Device,XLIGHT Hub,XLight,XLIGHT Hub
Device,XLIGHT Dichroic,XLight,XLIGHT Dichroic
Device,XLIGHT Disk slider,XLight,XLIGHT Disk slider
Device,XLIGHT Spin motor,XLight,XLIGHT Spin motor
Device,XLIGHT Emission Wheel,XLight,XLIGHT Emission Wheel
Device,XLIGHT Excitation Wheel,XLight,XLIGHT Excitation Wheel
Device,LightEngine,Lumencor,LightEngine
Device,DigitalIO,NI100X,DigitalIO
Device,Celesta shutter,Utilities,State Device Shutter
Device,Camera-1,PVCAM,Camera-1

# Pre-init settings for devices
Property,COM3,AnswerTimeout,10000
Property,COM3,BaudRate,115200
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,NIMultiAnalogOutHub,Device,Dev1
Property,NIMultiAnalogOutHub,MaxSequenceLength,1024
Property,NIMultiAnalogOut-Dev1/ao2,MaxVolts,10.0000
Property,NIMultiAnalogOut-Dev1/ao2,MinVolts,0.0000
Property,NIMultiAnalogOut-Dev1/ao2,Sequencing,Use hub setting
Property,DA Z Stage,Stage High Position(um),400.0000
Property,DA Z Stage,Stage High Voltage,10.0000
Property,DA Z Stage,Stage Low Position(um),0.0000
Property,DA Z Stage,Stage Low Voltage,0.0000
Property,XLIGHT Hub,Port,COM3
Property,LightEngine,Connection,COM4
Property,LightEngine,Model,GEN3
Property,DigitalIO,AutoDetectedOutputPort,Dev1/port0
Property,DigitalIO,IOChannel,Dev1/port0
Property,DigitalIO,TriggerSequenceLength,1000

# Pre-init settings for COM ports

# Hub (parent) references
Parent,ZDrive,Ti2-E__0
Parent,XYStage,Ti2-E__0
Parent,FilterTurret1,Ti2-E__0
Parent,Turret1Shutter,Ti2-E__0
Parent,LightPath,Ti2-E__0
Parent,PFS,Ti2-E__0
Parent,PFSOffset,Ti2-E__0
Parent,DiaLamp,Ti2-E__0
Parent,NIMultiAnalogOut-Dev1/ao2,NIMultiAnalogOutHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,1
FocusDirection,PFSOffset,0
FocusDirection,DA Z Stage,1

# Roles
Property,Core,Camera,Camera-1
Property,Core,Shutter,Celesta shutter
Property,Core,Focus,DA Z Stage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# FilterTurret1
Label,FilterTurret1,5,6-
Label,FilterTurret1,4,5-
Label,FilterTurret1,3,4-
Label,FilterTurret1,2,3-
Label,FilterTurret1,1,2-
Label,FilterTurret1,0,1-Spinning disk
# LightPath
Label,LightPath,3,4-L100
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE
# XLIGHT Dichroic
Label,XLIGHT Dichroic,2,421/491/572
Label,XLIGHT Dichroic,1,ZT405/514/635RPC
Label,XLIGHT Dichroic,0,421/491/567/659/776
# XLIGHT Disk slider
Label,XLIGHT Disk slider,2,Disk Pos 40um
Label,XLIGHT Disk slider,1,Disk Pos 70um
Label,XLIGHT Disk slider,0,Disk Out
# XLIGHT Spin motor
Label,XLIGHT Spin motor,1,On (spinning)
Label,XLIGHT Spin motor,0,Off (no spin)
# XLIGHT Emission Wheel
Label,XLIGHT Emission Wheel,7,532/640
Label,XLIGHT Emission Wheel,6,DAPI/GFP/TxRed-69401
Label,XLIGHT Emission Wheel,5,6-Empty
Label,XLIGHT Emission Wheel,4,775/140
Label,XLIGHT Emission Wheel,3,676/29
Label,XLIGHT Emission Wheel,2,3-Empty
Label,XLIGHT Emission Wheel,1,565/24
Label,XLIGHT Emission Wheel,0,441/511/593/684/817
# XLIGHT Excitation Wheel
Label,XLIGHT Excitation Wheel,7,Excitation-7
Label,XLIGHT Excitation Wheel,6,Excitation-6
Label,XLIGHT Excitation Wheel,5,Excitation-5
Label,XLIGHT Excitation Wheel,4,Excitation-4
Label,XLIGHT Excitation Wheel,3,Excitation-3
Label,XLIGHT Excitation Wheel,2,Excitation-2
Label,XLIGHT Excitation Wheel,1,Excitation-1
Label,XLIGHT Excitation Wheel,0,Excitation-0
# DigitalIO
Label,DigitalIO,32,514
Label,DigitalIO,8,488
Label,DigitalIO,536870912,730
Label,DigitalIO,1,440
Label,DigitalIO,1024,640
Label,DigitalIO,1073741824,365
Label,DigitalIO,0,0
Label,DigitalIO,-2147483648,561

# Configuration presets
# Group: Channel
# Preset: C
ConfigGroup,Channel,C,DiaLamp,Intensity,500
ConfigGroup,Channel,C,XLIGHT Dichroic,Label,ZT405/514/635RPC
ConfigGroup,Channel,C,XLIGHT Emission Wheel,Label,775/140
ConfigGroup,Channel,C,LightEngine,CYAN_Intensity,1000
ConfigGroup,Channel,C,LightEngine,GREEN_Intensity,1000
ConfigGroup,Channel,C,LightEngine,RED_Intensity,1000
ConfigGroup,Channel,C,LightEngine,TEAL_Intensity,1000
ConfigGroup,Channel,C,LightEngine,VIOLET_Intensity,500
ConfigGroup,Channel,C,DigitalIO,Label,640
ConfigGroup,Channel,C,Core,Shutter,Celesta shutter
ConfigGroup,Channel,C,Camera-1,Exposure,40.0000

# Preset: Hyb-Cy5
ConfigGroup,Channel,Hyb-Cy5,DiaLamp,Intensity,500
ConfigGroup,Channel,Hyb-Cy5,Camera-1,Exposure,20.0000
ConfigGroup,Channel,Hyb-Cy5,XLIGHT Dichroic,Label,ZT405/514/635RPC
ConfigGroup,Channel,Hyb-Cy5,XLIGHT Emission Wheel,Label,532/640
ConfigGroup,Channel,Hyb-Cy5,LightEngine,CYAN_Intensity,1000
ConfigGroup,Channel,Hyb-Cy5,LightEngine,GREEN_Intensity,1000
ConfigGroup,Channel,Hyb-Cy5,LightEngine,RED_Intensity,200
ConfigGroup,Channel,Hyb-Cy5,LightEngine,TEAL_Intensity,1000
ConfigGroup,Channel,Hyb-Cy5,LightEngine,VIOLET_Intensity,500
ConfigGroup,Channel,Hyb-Cy5,DigitalIO,Label,640
ConfigGroup,Channel,Hyb-Cy5,Core,Shutter,Celesta shutter

# Preset: C-focus
ConfigGroup,Channel,C-focus,DiaLamp,Intensity,500
ConfigGroup,Channel,C-focus,Camera-1,Exposure,20.0000
ConfigGroup,Channel,C-focus,XLIGHT Dichroic,Label,ZT405/514/635RPC
ConfigGroup,Channel,C-focus,XLIGHT Emission Wheel,Label,775/140
ConfigGroup,Channel,C-focus,LightEngine,CYAN_Intensity,1000
ConfigGroup,Channel,C-focus,LightEngine,GREEN_Intensity,1000
ConfigGroup,Channel,C-focus,LightEngine,RED_Intensity,500
ConfigGroup,Channel,C-focus,LightEngine,TEAL_Intensity,1000
ConfigGroup,Channel,C-focus,LightEngine,VIOLET_Intensity,500
ConfigGroup,Channel,C-focus,DigitalIO,Label,640
ConfigGroup,Channel,C-focus,Core,Shutter,Celesta shutter

# Preset: A
ConfigGroup,Channel,A,DiaLamp,Intensity,500
ConfigGroup,Channel,A,XLIGHT Dichroic,Label,ZT405/514/635RPC
ConfigGroup,Channel,A,XLIGHT Emission Wheel,Label,676/29
ConfigGroup,Channel,A,LightEngine,CYAN_Intensity,1000
ConfigGroup,Channel,A,LightEngine,GREEN_Intensity,1000
ConfigGroup,Channel,A,LightEngine,RED_Intensity,1000
ConfigGroup,Channel,A,LightEngine,TEAL_Intensity,1000
ConfigGroup,Channel,A,LightEngine,VIOLET_Intensity,500
ConfigGroup,Channel,A,DigitalIO,Label,640
ConfigGroup,Channel,A,Core,Shutter,Celesta shutter
ConfigGroup,Channel,A,Camera-1,Exposure,20.0000

# Preset: Hyb-DAPI
ConfigGroup,Channel,Hyb-DAPI,DiaLamp,Intensity,500
ConfigGroup,Channel,Hyb-DAPI,Camera-1,Exposure,30.0000
ConfigGroup,Channel,Hyb-DAPI,XLIGHT Dichroic,Label,421/491/567/659/776
ConfigGroup,Channel,Hyb-DAPI,XLIGHT Emission Wheel,Label,DAPI/GFP/TxRed-69401
ConfigGroup,Channel,Hyb-DAPI,LightEngine,CYAN_Intensity,1000
ConfigGroup,Channel,Hyb-DAPI,LightEngine,GREEN_Intensity,1000
ConfigGroup,Channel,Hyb-DAPI,LightEngine,RED_Intensity,1000
ConfigGroup,Channel,Hyb-DAPI,LightEngine,TEAL_Intensity,1000
ConfigGroup,Channel,Hyb-DAPI,LightEngine,VIOLET_Intensity,500
ConfigGroup,Channel,Hyb-DAPI,DigitalIO,Label,365
ConfigGroup,Channel,Hyb-DAPI,Core,Shutter,Celesta shutter

# Preset: T
ConfigGroup,Channel,T,DiaLamp,Intensity,500
ConfigGroup,Channel,T,XLIGHT Dichroic,Label,421/491/567/659/776
ConfigGroup,Channel,T,XLIGHT Emission Wheel,Label,441/511/593/684/817
ConfigGroup,Channel,T,LightEngine,CYAN_Intensity,1000
ConfigGroup,Channel,T,LightEngine,GREEN_Intensity,1000
ConfigGroup,Channel,T,LightEngine,RED_Intensity,1000
ConfigGroup,Channel,T,LightEngine,TEAL_Intensity,1000
ConfigGroup,Channel,T,LightEngine,VIOLET_Intensity,500
ConfigGroup,Channel,T,DigitalIO,Label,561
ConfigGroup,Channel,T,Core,Shutter,Celesta shutter
ConfigGroup,Channel,T,Camera-1,Exposure,30.0000

# Preset: Hyb-YFP
ConfigGroup,Channel,Hyb-YFP,DiaLamp,Intensity,500
ConfigGroup,Channel,Hyb-YFP,Camera-1,Exposure,30.0000
ConfigGroup,Channel,Hyb-YFP,XLIGHT Dichroic,Label,ZT405/514/635RPC
ConfigGroup,Channel,Hyb-YFP,XLIGHT Emission Wheel,Label,565/24
ConfigGroup,Channel,Hyb-YFP,LightEngine,CYAN_Intensity,1000
ConfigGroup,Channel,Hyb-YFP,LightEngine,GREEN_Intensity,1000
ConfigGroup,Channel,Hyb-YFP,LightEngine,RED_Intensity,1000
ConfigGroup,Channel,Hyb-YFP,LightEngine,TEAL_Intensity,1000
ConfigGroup,Channel,Hyb-YFP,LightEngine,VIOLET_Intensity,500
ConfigGroup,Channel,Hyb-YFP,DigitalIO,Label,514
ConfigGroup,Channel,Hyb-YFP,Core,Shutter,Celesta shutter

# Preset: DIC
ConfigGroup,Channel,DIC,DiaLamp,Intensity,500
ConfigGroup,Channel,DIC,Camera-1,Exposure,20.0000
ConfigGroup,Channel,DIC,XLIGHT Dichroic,Label,ZT405/514/635RPC
ConfigGroup,Channel,DIC,XLIGHT Emission Wheel,Label,775/140
ConfigGroup,Channel,DIC,LightEngine,CYAN_Intensity,1000
ConfigGroup,Channel,DIC,LightEngine,GREEN_Intensity,1000
ConfigGroup,Channel,DIC,LightEngine,RED_Intensity,1000
ConfigGroup,Channel,DIC,LightEngine,TEAL_Intensity,1000
ConfigGroup,Channel,DIC,LightEngine,VIOLET_Intensity,500
ConfigGroup,Channel,DIC,DigitalIO,Label,0
ConfigGroup,Channel,DIC,Core,Shutter,DiaLamp

# Preset: Hyb-GFP
ConfigGroup,Channel,Hyb-GFP,DiaLamp,Intensity,500
ConfigGroup,Channel,Hyb-GFP,Camera-1,Exposure,100.0000
ConfigGroup,Channel,Hyb-GFP,XLIGHT Dichroic,Label,421/491/567/659/776
ConfigGroup,Channel,Hyb-GFP,XLIGHT Emission Wheel,Label,DAPI/GFP/TxRed-69401
ConfigGroup,Channel,Hyb-GFP,LightEngine,CYAN_Intensity,1000
ConfigGroup,Channel,Hyb-GFP,LightEngine,GREEN_Intensity,1000
ConfigGroup,Channel,Hyb-GFP,LightEngine,RED_Intensity,1000
ConfigGroup,Channel,Hyb-GFP,LightEngine,TEAL_Intensity,1000
ConfigGroup,Channel,Hyb-GFP,LightEngine,VIOLET_Intensity,500
ConfigGroup,Channel,Hyb-GFP,DigitalIO,Label,488
ConfigGroup,Channel,Hyb-GFP,Core,Shutter,Celesta shutter

# Preset: C-live
ConfigGroup,Channel,C-live,DiaLamp,Intensity,500
ConfigGroup,Channel,C-live,Camera-1,Exposure,100.0000
ConfigGroup,Channel,C-live,XLIGHT Dichroic,Label,ZT405/514/635RPC
ConfigGroup,Channel,C-live,XLIGHT Emission Wheel,Label,775/140
ConfigGroup,Channel,C-live,LightEngine,CYAN_Intensity,1000
ConfigGroup,Channel,C-live,LightEngine,GREEN_Intensity,1000
ConfigGroup,Channel,C-live,LightEngine,RED_Intensity,50
ConfigGroup,Channel,C-live,LightEngine,TEAL_Intensity,1000
ConfigGroup,Channel,C-live,LightEngine,VIOLET_Intensity,500
ConfigGroup,Channel,C-live,DigitalIO,Label,640
ConfigGroup,Channel,C-live,Core,Shutter,Celesta shutter

# Preset: Hyb-TxRed-live
ConfigGroup,Channel,Hyb-TxRed-live,DiaLamp,Intensity,500
ConfigGroup,Channel,Hyb-TxRed-live,Camera-1,Exposure,100.0000
ConfigGroup,Channel,Hyb-TxRed-live,XLIGHT Dichroic,Label,421/491/567/659/776
ConfigGroup,Channel,Hyb-TxRed-live,XLIGHT Emission Wheel,Label,DAPI/GFP/TxRed-69401
ConfigGroup,Channel,Hyb-TxRed-live,LightEngine,CYAN_Intensity,1000
ConfigGroup,Channel,Hyb-TxRed-live,LightEngine,GREEN_Intensity,100
ConfigGroup,Channel,Hyb-TxRed-live,LightEngine,RED_Intensity,1000
ConfigGroup,Channel,Hyb-TxRed-live,LightEngine,TEAL_Intensity,1000
ConfigGroup,Channel,Hyb-TxRed-live,LightEngine,VIOLET_Intensity,500
ConfigGroup,Channel,Hyb-TxRed-live,DigitalIO,Label,561
ConfigGroup,Channel,Hyb-TxRed-live,Core,Shutter,Celesta shutter

# Preset: G
ConfigGroup,Channel,G,DiaLamp,Intensity,500
ConfigGroup,Channel,G,XLIGHT Dichroic,Label,ZT405/514/635RPC
ConfigGroup,Channel,G,XLIGHT Emission Wheel,Label,565/24
ConfigGroup,Channel,G,LightEngine,CYAN_Intensity,1000
ConfigGroup,Channel,G,LightEngine,GREEN_Intensity,1000
ConfigGroup,Channel,G,LightEngine,RED_Intensity,1000
ConfigGroup,Channel,G,LightEngine,TEAL_Intensity,1000
ConfigGroup,Channel,G,LightEngine,VIOLET_Intensity,500
ConfigGroup,Channel,G,DigitalIO,Label,514
ConfigGroup,Channel,G,Core,Shutter,Celesta shutter
ConfigGroup,Channel,G,Camera-1,Exposure,60.0000

# Preset: Hyb-TxRed
ConfigGroup,Channel,Hyb-TxRed,DiaLamp,Intensity,500
ConfigGroup,Channel,Hyb-TxRed,Camera-1,Exposure,30.0000
ConfigGroup,Channel,Hyb-TxRed,XLIGHT Dichroic,Label,421/491/567/659/776
ConfigGroup,Channel,Hyb-TxRed,XLIGHT Emission Wheel,Label,DAPI/GFP/TxRed-69401
ConfigGroup,Channel,Hyb-TxRed,LightEngine,CYAN_Intensity,1000
ConfigGroup,Channel,Hyb-TxRed,LightEngine,GREEN_Intensity,1000
ConfigGroup,Channel,Hyb-TxRed,LightEngine,RED_Intensity,1000
ConfigGroup,Channel,Hyb-TxRed,LightEngine,TEAL_Intensity,1000
ConfigGroup,Channel,Hyb-TxRed,LightEngine,VIOLET_Intensity,500
ConfigGroup,Channel,Hyb-TxRed,DigitalIO,Label,561
ConfigGroup,Channel,Hyb-TxRed,Core,Shutter,Celesta shutter


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Camera-1,Port,Sensitivity
ConfigGroup,System,Startup,NIMultiAnalogOutHub,Sequence,On
ConfigGroup,System,Startup,DA Z Stage,DA Device,NIMultiAnalogOut-Dev1/ao2
ConfigGroup,System,Startup,DA Z Stage,Position,200.0000
ConfigGroup,System,Startup,XLIGHT Spin motor,Label,On (spinning)
ConfigGroup,System,Startup,DigitalIO,Sequenceable,1
ConfigGroup,System,Startup,Celesta shutter,State Device,DigitalIO
ConfigGroup,System,Startup,Core,Camera,Camera-1
ConfigGroup,System,Startup,Core,Focus,DA Z Stage
ConfigGroup,System,Startup,Core,Shutter,Celesta shutter
ConfigGroup,System,Startup,Core,ChannelGroup,Channel
ConfigGroup,System,Startup,LightPath,Label,4-L100



# PixelSize settings
# Resolution preset: 20x
ConfigPixelSize,20x,Core,Camera,Camera-1
PixelSize_um,20x,0.34
PixelSizeAffine,20x,0.34,0.0,0.0,0.0,0.34,0.0

